CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:427
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:g
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:g
    Name the primary objects to be identified:_celroxsignal
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureObjectIntensity:[module_num:6|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
    Select images to measure:g
    Select objects to measure:_celroxsignal

ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/lrm
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
    Data to export:_celroxsignal
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToDatabase:[module_num:8|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Experiment name:MyExpt
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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